PsychoPy2experiment version="2020.2.3"
Settings
  Data filename = u'data' + os.sep + '%s_%s' % (expInfo['participant'], expInfo['date'])
  Experiment info = {u'session': u'01', u'participant': u''}
  Full-screen window = True
  Monitor = testMonitor
  Save excel file = True
  Screen = 1
  Units = norm
  Window size (pixels) = [2560, 1440]
  color = black
  expName = 2_afc_eng
  logging level = warning
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Routines
  Routine instruct
    TextComponent instrText
      color = $[1, 1, 1]
      letterHeight = 0.1
      startVal [time (s)] = 0
      text = Practice Instructions - use the left and right mouse key to answer.  You will hear the beginning of a rare word in English. Use the left or right mouse key to decide which word is beginning to be said. 
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    KeyboardComponent ready
      correctAns = thisTrial.corrAns
      forceEndRoutine = True
      startVal [time (s)] = 0
      store = nothing
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  Routine thanks
    TextComponent thanksText
      color = $[1, 1, 1]
      font = arial
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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      text:
        This is the end of the experiment.

        Thanks!
  Routine practice
    TextComponent cross_tr
      color = red
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .4
      text = +
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    SoundComponent sound_1
      hamming = False
      sound [set every repeat] = $stimuli
      startVal [time (s)] = .5
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    KeyboardComponent resp
      allowedKeys = "left","right"
      correctAns = $stimuli
      forceEndRoutine = True
      startVal [time (s)] = 0.5
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    TextComponent feefri_p
      letterHeight = 0.1
      pos = [-0.4, -0.2]
      startVal [time (s)] = .5
      text = feefri
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    TextComponent foofri_practice
      letterHeight = 0.1
      pos = [0.4, -0.25]
      startVal [time (s)] = .5
      text = foofri
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  Routine got_it
    TextComponent gotIT
      letterHeight = 0.08
      startVal [time (s)] = .75
      stopVal [duration (s)] = 1.0
      text = Got it? If you have any questions please ask the experimenter now. If not, press the spacebar to begin the experiment. 
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    KeyboardComponent gotResponse
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 1.0
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  Routine ba_pa
    TextComponent cross_tr_3
      color = red
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .4
      text = +
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    SoundComponent sound_3
      hamming = False
      sound [set every repeat] = $stimuli
      startVal [time (s)] = .5
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    KeyboardComponent resp_3
      allowedKeys = "left","right"
      correctAns = $stimuli
      forceEndRoutine = True
      startVal [time (s)] = 0.5
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    TextComponent pafri
      letterHeight = 0.1
      pos = [-0.4, -0.2]
      startVal [time (s)] = .5
      text = pafri
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    TextComponent bafri
      letterHeight = 0.1
      pos = [0.4, -0.2]
      startVal [time (s)] = .5
      text = bafri
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  Routine instruct_2
    TextComponent instrText_2
      color = $[1, 1, 1]
      letterHeight = 0.1
      startVal [time (s)] = 0
      text = Part 2 - now the instructions are the same, but we have two new words.
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    KeyboardComponent ready_2
      correctAns = thisTrial.corrAns
      forceEndRoutine = True
      startVal [time (s)] = 0
      store = nothing
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  Routine i_u
    TextComponent cross_tr_2
      color = red
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .4
      text = +
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    SoundComponent sound_2
      hamming = False
      sound [set every repeat] = $stimuli
      startVal [time (s)] = .5
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    KeyboardComponent resp_2
      allowedKeys = "left","right"
      correctAns = $stimuli
      forceEndRoutine = True
      startVal [time (s)] = 0.5
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    TextComponent feefri_p_2
      letterHeight = 0.1
      pos = [-0.4, -0.2]
      startVal [time (s)] = .5
      text = feefri
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    TextComponent foofri_practice_2
      letterHeight = 0.1
      pos = [0.4, -0.25]
      startVal [time (s)] = .5
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      text:
        foofri
Flow
  Routine instruct
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = practice_condition.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('stimuli', 'stim/VC_01.wav')]),
      OrderedDict([('stimuli', 'stim/VC_11.wav')])]
    Routine practice
  LoopTerminator trials
  Routine got_it
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = condition.csv
    loopType = random
    nReps = 5
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    conditions:
      [OrderedDict([('stimuli', 'stim/VC_01.wav')]),
      OrderedDict([('stimuli', 'stim/VC_02.wav')]),
      OrderedDict([('stimuli', 'stim/VC_03.wav')]),
      OrderedDict([('stimuli', 'stim/VC_04.wav')]),
      OrderedDict([('stimuli', 'stim/VC_05.wav')]),
      OrderedDict([('stimuli', 'stim/VC_06.wav')]),
      OrderedDict([('stimuli', 'stim/VC_07.wav')]),
      OrderedDict([('stimuli', 'stim/VC_08.wav')]),
      OrderedDict([('stimuli', 'stim/VC_09.wav')]),
      OrderedDict([('stimuli', 'stim/VC_10.wav')]),
      OrderedDict([('stimuli', 'stim/VC_11.wav')])]
    Routine i_u
  LoopTerminator trials_2
  Routine instruct_2
  LoopInitiator trials_3 loopType="TrialHandler"
    conditionsFile = cond_2.xlsx
    loopType = random
    nReps = 5
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    conditions:
      [OrderedDict([('stimuli', 'stim2/pa+05.wav')]),
      OrderedDict([('stimuli', 'stim2/pa+10.wav')]),
      OrderedDict([('stimuli', 'stim2/pa+15.wav')]),
      OrderedDict([('stimuli', 'stim2/pa+20.wav')]),
      OrderedDict([('stimuli', 'stim2/pa+25.wav')]),
      OrderedDict([('stimuli', 'stim2/pa+30.wav')]),
      OrderedDict([('stimuli', 'stim2/pa+35.wav')]),
      OrderedDict([('stimuli', 'stim2/pa+40.wav')]),
      OrderedDict([('stimuli', 'stim2/pa+45.wav')]),
      OrderedDict([('stimuli', 'stim2/pa+50.wav')]),
      OrderedDict([('stimuli', 'stim2/pa-05.wav')]),
      OrderedDict([('stimuli', 'stim2/pa-10.wav')]),
      OrderedDict([('stimuli', 'stim2/pa-15.wav')]),
      OrderedDict([('stimuli', 'stim2/pa-20.wav')]),
      OrderedDict([('stimuli', 'stim2/pa-25.wav')]),
      OrderedDict([('stimuli', 'stim2/pa-30.wav')]),
      OrderedDict([('stimuli', 'stim2/pa-35.wav')])]
    Routine ba_pa
  LoopTerminator trials_3
  Routine thanks
