PsychoPy2experiment version="2020.2.3"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = pa_ba
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Routines
  Routine pa_ba
    TextComponent cross_tr_2
      color = red
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .4
      text = +
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    SoundComponent sound_2
      hamming = False
      sound [set every repeat] = $stimuli
      startVal [time (s)] = .5
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    KeyboardComponent resp_2
      allowedKeys = "left","right"
      correctAns = $stimuli
      forceEndRoutine = True
      startVal [time (s)] = 0.5
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    TextComponent pa
      letterHeight = 0.1
      pos = [-0.4, -0.2]
      startVal [time (s)] = .5
      text = pafri
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    TextComponent ba
      letterHeight = 0.1
      pos = [0.4, -0.2]
      startVal [time (s)] = .5
      text = bafri
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  Routine pa_ba_2
    TextComponent cross_tr
      color = red
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .4
      text = +
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    SoundComponent sound_3
      hamming = False
      sound [set every repeat] = $stimuli
      startVal [time (s)] = .5
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    KeyboardComponent resp
      allowedKeys = "left","right"
      correctAns = $stimuli
      forceEndRoutine = True
      startVal [time (s)] = 0.5
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    TextComponent pa_2
      letterHeight = 0.1
      pos = [-0.4, -0.2]
      startVal [time (s)] = .5
      text = pafri
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    TextComponent ba_2
      letterHeight = 0.1
      pos = [0.4, -0.2]
      startVal [time (s)] = .5
      text = bafri
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = cond_2.xlsx
    loopType = random
    nReps = 5
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    conditions:
      [OrderedDict([('stimuli', 'stim2/pa+05.wav')]),
      OrderedDict([('stimuli', 'stim2/pa+10.wav')]),
      OrderedDict([('stimuli', 'stim2/pa+15.wav')]),
      OrderedDict([('stimuli', 'stim2/pa+20.wav')]),
      OrderedDict([('stimuli', 'stim2/pa+25.wav')]),
      OrderedDict([('stimuli', 'stim2/pa+30.wav')]),
      OrderedDict([('stimuli', 'stim2/pa+35.wav')]),
      OrderedDict([('stimuli', 'stim2/pa+40.wav')]),
      OrderedDict([('stimuli', 'stim2/pa+45.wav')]),
      OrderedDict([('stimuli', 'stim2/pa+50.wav')]),
      OrderedDict([('stimuli', 'stim2/pa-05.wav')]),
      OrderedDict([('stimuli', 'stim2/pa-10.wav')]),
      OrderedDict([('stimuli', 'stim2/pa-15.wav')]),
      OrderedDict([('stimuli', 'stim2/pa-20.wav')]),
      OrderedDict([('stimuli', 'stim2/pa-25.wav')]),
      OrderedDict([('stimuli', 'stim2/pa-30.wav')]),
      OrderedDict([('stimuli', 'stim2/pa-35.wav')])]
    Routine pa_ba
  LoopTerminator trials
